PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = mReversalNewAlpha3
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        targetangle = targetAngles[trials.thisN]
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4)

        # Math.PI
        # Math.cos()
        # Math.sin()

        targetOpacity = 0
        homeOpacity = 0

        homeStart = False
        reachOut = False

        trialStep = 1
        steps = []

        if taskCounter == 3:
            trialCount.text = str(trials.thisN+1)+" / 90"
        else:
            trialCount.text = str(trials.thisN+1)+" / 20"

        trialCursor.pos = (1.5,1.5)
        trialMouse.pos = (1.5,1.5)

        if taskCounter == 2:
            trialsType = 1
            trialsNum = 1
        elif taskCounter == 3:
            trialsType = -1
            trialsNum = 2
        else:
            trialsType = 1
            trialsNum = 3

        trialNum = trialCounter

        trialCounter = trialCounter+1
      Each Frame:
        CursorTargetDistance = sqrt((trialCursor.pos[0]-trialTarget.pos[0])**2 + (trialCursor.pos[1]-trialTarget.pos[1])**2)
        CursorHomeDistance = sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2)

        steps.append(trialStep)
        # steps.push(step)

        if taskCounter == 3:
            mousePosX = -(trialMouse.getPos()[0])
            mousePosY = trialMouse.getPos()[1]
        else:
            mousePosX = trialMouse.getPos()[0]
            mousePosY = trialMouse.getPos()[1]

        if not(homeStart):
            homeOpacity = 1
            targetOpacity = 0
            trialStep = 1
            if (CursorHomeDistance < .05):
                homeStart = True
                print('end step 1'+' ('+str(globalClock.getTime())+')')

        if (not(reachOut) and homeStart):
            homeOpacity = 0
            targetOpacity = 1
            trialStep = 2
            if (CursorTargetDistance < .05):
                reachOut = True
                print('end step 2'+' ('+str(globalClock.getTime())+')')

        if (reachOut):
            homeOpacity = 1
            targetOpacity = 0
            trialStep = 3
            if (CursorHomeDistance < .05):
                # maybe this ends the loop prematurely?
                print('end step 3'+' ('+str(globalClock.getTime())+')')
                continueRoutine = False

        #steps = steps.append(step)
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)
        thisExp.addData('trialsType', trialsType)
        thisExp.addData('trialsNum', trialsNum)
        thisExp.addData('trialNum', trialNum)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    PolygonComponent trialTarget
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialHome
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $[-1.000,-1.000,-1.000]
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      pos [set every frame] = (mousePosX, mousePosY)
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      startExpValue = 0
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    TextComponent trialCount
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      text = trialCount
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    KeyboardComponent trialSkip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent intrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if taskCounter == 1:
            trialReps = 20
            instrText.text = "In this task use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 20 trials in this first set. Press ‘space’ to start."
        elif taskCounter == 2:
            trialReps = 90
            instrText.text = "For the next block of trials, the cursor movement will be mirrored over the Y-axis. Again, use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 90 trials in this next set. Press ‘space’ to start."
        elif taskCounter == 3:
            trialReps = 20
            instrText.text = "For the next block of trials, the cursor movement will be normal. Again, use your mouse to move the cursor (in black) between the middle start position and the outward targets (both in white). Always try to move as straight and smooth as possible. Whenever you make an error, just do better on the next trial and continue as best you can. There will be 20 trials in this next set. Press ‘space’ to start."
        else:
            trialReps = 20
            instrText.text = "space"

        taskCounter = taskCounter + 1
  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to finish the experiment.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    CodeComponent JSCode
      Code Type = Auto->JS
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    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        taskCounter = 1
        trialCounter = 1

        if taskCounter == 2:
            trialReps = 90
        else:
            trialReps = 20

        win.mouseVisible = False

        # psychoJS.window

        targetAngles = [30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60, 30, 60]
        #targetAngles = [(t/180)*pi for t in targetAngles]

        #mouse = event.Mouse(visible = False)
        #mouse = new psychoJS.event.Mouse({"visible": false});


        # document.getElementById('hide_id').style.cursor = 'none';
        # document.documentElement.style.cursor = 'none';
      End Experiment:
        win.mouseVisible = True
Flow
  Routine setup
  LoopInitiator tasks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = trialReps
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      Routine trial
    LoopTerminator trials
  LoopTerminator tasks
  Routine end
